PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = flow
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Routines
  Routine trial
  Routine filter
  Routine fixation
    TextComponent fixationResp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine flanker
    ImageComponent image1
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine breakScr
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the SPACE key to continue.
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    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent byeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The experiment is now complete.

        Thank you, and goodbye!
  Routine instructions
    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a set of faces in the middle of the screen.
        One (1) of these faces will either be a POLITICIAN or a POP STAR.

        If the face is a POLITICIAN, press the F key.
        If the face is a POP STAR, press the K key.

        You will also see a face o one side of the set.
        Please ignore this face as best as you can.

        At all times, please:
        - Keep your eyes fixed on the cross (+) at the center of the screen.
        - Respond as quickly and accurately as you can.

        Press the SPACE key to begin the experiment.
Flow
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'practice')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pol')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pol')])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
      Routine fixation
      Routine flanker
    LoopTerminator trials
    Routine breakScr
  LoopTerminator blocks
  Routine goodbye
